PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = delay discounting
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l',
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = delay dicounting conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 58, 'delay': 89},
      {'reward_today': 45, 'future_reward': 78, 'delay': 81},
      {'reward_today': 13, 'future_reward': 63, 'delay': 59},
      {'reward_today': 21, 'future_reward': 86, 'delay': 78},
      {'reward_today': 1, 'future_reward': 59, 'delay': 137},
      {'reward_today': 4, 'future_reward': 92, 'delay': 98},
      {'reward_today': 6, 'future_reward': 54, 'delay': 46},
      {'reward_today': 50, 'future_reward': 59, 'delay': 147},
      {'reward_today': 38, 'future_reward': 96, 'delay': 90},
      {'reward_today': 20, 'future_reward': 82, 'delay': 93},
      {'reward_today': 10, 'future_reward': 83, 'delay': 93},
      {'reward_today': 38, 'future_reward': 99, 'delay': 100},
      {'reward_today': 23, 'future_reward': 87, 'delay': 143},
      {'reward_today': 18, 'future_reward': 100, 'delay': 69},
      {'reward_today': 6, 'future_reward': 82, 'delay': 99},
      {'reward_today': 22, 'future_reward': 70, 'delay': 48},
      {'reward_today': 7, 'future_reward': 67, 'delay': 115},
      {'reward_today': 3, 'future_reward': 76, 'delay': 37},
      {'reward_today': 17, 'future_reward': 78, 'delay': 73},
      {'reward_today': 36, 'future_reward': 73, 'delay': 89},
      {'reward_today': 3, 'future_reward': 85, 'delay': 74},
      {'reward_today': 34, 'future_reward': 78, 'delay': 145},
      {'reward_today': 45, 'future_reward': 89, 'delay': 48},
      {'reward_today': 6, 'future_reward': 81, 'delay': 38},
      {'reward_today': 19, 'future_reward': 79, 'delay': 43},
      {'reward_today': 25, 'future_reward': 97, 'delay': 148},
      {'reward_today': 25, 'future_reward': 72, 'delay': 41}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
    Routine trial
  LoopTerminator trials
