PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = solo-project
  keyboardBackend = PsychToolbox
  runMode = 1
  rush = True
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Routines
  Routine trial
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    ImageComponent neut
      image = stimuli/neutralface.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.4
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  Routine instructions
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    TextComponent inst
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = In this task, there will be a face present in the center of the screen. Shortly after that, an image will appear either to the right or left of the face. You have to drag the mouse to the image and click to complete the trial. There will be 120 such trials. Click SPACEBAR on your keyboard to continue. 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine resp
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    ImageComponent targ
      image [set every repeat] = $target_image
      pos [set every repeat] = [posx, posy]
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
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    ImageComponent G
      image [set every frame] = $gaze_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    MouseComponent mouse
      clickable = $targ
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditionsgazecue.xlsx
    loopType = random
    nReps = 15
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    conditions:
      [{'gaze_image': 'C:\\Users\\RIYA MANIYAR\\OneDrive\\Desktop\\Lab in Psycholgy\\Solo-project Gaze Cue\\stimuli\\gaze_image\\leftgaze.png', 'posx': 0.5, 'posy': 0, 'validity': 'invalid', 'target_image': 'C:\\Users\\RIYA MANIYAR\\OneDrive\\Desktop\\Lab in Psycholgy\\Solo-project Gaze Cue\\stimuli\\target\\men neutral face.JPG'},
      {'gaze_image': 'C:\\Users\\RIYA MANIYAR\\OneDrive\\Desktop\\Lab in Psycholgy\\Solo-project Gaze Cue\\stimuli\\gaze_image\\leftgaze.png', 'posx': -0.5, 'posy': 0, 'validity': 'valid', 'target_image': 'C:\\Users\\RIYA MANIYAR\\OneDrive\\Desktop\\Lab in Psycholgy\\Solo-project Gaze Cue\\stimuli\\target\\men neutral face.JPG'},
      {'gaze_image': 'C:\\Users\\RIYA MANIYAR\\OneDrive\\Desktop\\Lab in Psycholgy\\Solo-project Gaze Cue\\stimuli\\gaze_image\\rightgaze.png', 'posx': 0.5, 'posy': 0, 'validity': 'valid', 'target_image': 'C:\\Users\\RIYA MANIYAR\\OneDrive\\Desktop\\Lab in Psycholgy\\Solo-project Gaze Cue\\stimuli\\target\\men neutral face.JPG'},
      {'gaze_image': 'C:\\Users\\RIYA MANIYAR\\OneDrive\\Desktop\\Lab in Psycholgy\\Solo-project Gaze Cue\\stimuli\\gaze_image\\rightgaze.png', 'posx': -0.5, 'posy': 0, 'validity': 'invalid', 'target_image': 'C:\\Users\\RIYA MANIYAR\\OneDrive\\Desktop\\Lab in Psycholgy\\Solo-project Gaze Cue\\stimuli\\target\\men neutral face.JPG'}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
    Routine trial
    Routine resp
  LoopTerminator trials
