PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text [set every repeat]:
        $word
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'r','b'
      correctAns = $Correct_Re
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine inst
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5
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      text:
        Press the 'b' key for blue font colour
        Press the 'r' key for red font colour
Flow
  Routine inst
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroop task conditions.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'St_condition': 'Cong', 'Correct_Re': 'r'},
      {'word': 'RED', 'colour': 'blue', 'St_condition': 'Incong', 'Correct_Re': 'b'},
      {'word': 'BLUE', 'colour': 'red', 'St_condition': 'Incong', 'Correct_Re': 'r'},
      {'word': 'BLUE', 'colour': 'blue', 'St_condition': 'Cong', 'Correct_Re': 'b'}]
    Routine trial
  LoopTerminator trials
